PsychoPy2experiment version="2024.1.5"
Settings
  Audio latency priority = 4
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'Experiment ID': '7357', 'EEG connected?': "['n','y']"}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1728, 1117]
  expName = startleFlanker_ERN
  keyboardBackend = PsychToolbox
  logging level = warning
  runMode = 0
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Routines
  Routine intro
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    TextboxComponent textbox_intro
      autoLog = False
      bold = False
      editable = False
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
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      text:
        This is just a test.




        Click anywhere to proceed...
    MouseComponent mouse_intro
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine fixation
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    StaticComponent ISI
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.1
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    ImageComponent image_fixation
      image = stimuli/fixation.bmp
      size = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine iTi
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    StaticComponent ITI
      durationEstim = 1
      startEstim = 0
      startVal [time (s)] = 0
      stopVal [duration (s)] = $iTi_time
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  Routine interTask
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    TextboxComponent textbox_break
      bold = False
      editable = False
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Have a break...
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  Routine end
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    TextboxComponent textbox
      bold = False
      editable = False
      letterHeight = 0.2
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Fin.
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  Routine blockCheck
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    CodeComponent code_blockCheck
      Code Type = Auto->JS
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      Begin Experiment:
        blockOrder = expInfo['blockOrder']

        blockOrder_A = {'block1':{1:True,2:False,3:False},
                        'block2':{1:False,2:True,3:False},
                            'block3':{1:False,2:False,3:True}}

        blockOrder_B = {'block1':{1:True,2:False,3:False},
                        'block2':{1:False,2:False,3:True},
                            'block3':{1:False,2:True,3:False}}

        blockOrder_C = {'block1':{1:False,2:True,3:False},
                        'block2':{1:2,2:False,3:False},
                            'block3':{1:False,2:False,3:True}}

        blockOrder_D = {'block1':{1:False,2:False,3:True},
                        'block2':{1:True,2:False,3:False},
                            'block3':{1:False,2:True,3:False}}

        blockOrder_E = {'block1':{1:False,2:True,3:False},
                        'block2':{1:False,2:False,3:True},
                            'block3':{1:True,2:False,3:False}}

        blockOrder_F = {'block1':{1:False,2:False,3:True},
                        'block2':{1:False,2:True,3:True},
                            'block3':{1:True,2:False,3:False}}

        blockOrders = {'A':blockOrder_A,'B':blockOrder_B,'C':blockOrder_C,
                        'D':blockOrder_D,'E':blockOrder_E,'F':blockOrder_F}
      Begin Routine:
        block1_nReps = blockOrders[expInfo['blockOrder']]['block1'][blocks.thisRepN+1]
        block2_nReps = blockOrders[expInfo['blockOrder']]['block2'][blocks.thisRepN+1]
        block3_nReps = blockOrders[expInfo['blockOrder']]['block3'][blocks.thisRepN+1]
  Routine performanceMessage
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    CodeComponent code_performance
      Code Type = Auto->JS
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      Begin Routine:
        '''
        If performance was 75% correct or lower, the message
        ‘‘Please try to be more accurate’’ was displayed; performance
        above 90% correct was followed by ‘‘Please try to respond
        faster’’; if performance was between these levels, the message
        ‘‘You’re doing a great job’’ was displayed.
        '''
        if runningAccuracy <= 75 :
            message = "Please try to be more accurate"
        elif runningAccuracy > 90 :
            message = "Please try to respond faster"
        else :
            message = "You’re doing a great job"
    TextboxComponent textbox_blockBreak
      bold = False
      editable = False
      letterHeight = 0.1
      size = (None, None)
      startVal [time (s)] = 0.0
      text [set every repeat] = $message
      units = norm
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    TextboxComponent textbox_continue
      bold = False
      editable = False
      letterHeight = 0.1
      pos = (0, -0.6)
      size = (0.5, 0.5)
      startVal [time (s)] = 1
      text = Click to continue...
      units = norm
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    MouseComponent mouse_continue
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 1
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  Routine ready
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    TextboxComponent textbox_ready
      bold = False
      editable = False
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
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      text:
        Ready for the real thing?




        Click anywhere to proceed...
    MouseComponent mouse_ready
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine trial_block
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    ImageComponent image_block
      image [set every repeat] = $stimulus
      size = 0.8
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stimulusDuration
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    MouseComponent mouse_block
      correctAns = correct_resp
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
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    CodeComponent code_trial
      Code Type = Py
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      Before Experiment:
        import random
        import time
        import psychtoolbox as ptb
        from psychopy import sound, visual
      Begin Experiment:
        showBreakMessage = False
        blockLength = 8
        stimulusDuration = 0.2
        totalTrials_count = 0
        totalTrials = 240
        accuracyTotal = 0
        runningAccuracy = 0
        accuracy_lastTrial = 0
        blockof30N = 0
        startled_trials0 = []
        startled_trials1 = []
        startled_trials4 = []
        startle = sound.Sound(value='stimuli/startle2_reencoded.wav',
                                                    volume=1.0,
                                                    hamming=False,
                                                    name='startle',
                                                    autoLog=False)
      Begin Routine:
        trialNofcurrentLoop = currentLoop.thisN + 1
        totalTrials_count += 1
        mouse_block.clickReset()
        iTi_time = random.randrange(500,1000,50) / 1000

        if totalTrials_count > 1 :
            accuracy_lastTrial = accuracy

        if "practice" in currentLoop.name :
            trialType = 'p'
        else :
            trialType = 'e'

        if totalTrials_count % blockLength == 0 \
            and trialType == 'e' :
                blockof30N += 1
                showBreakMessage = True
        elif totalTrials_count % blockLength == 0 \
            and trialType == 'p' :
                print("practice_trials finished...")
                practice_trials.finished = True
        else :
                showBreakMessage = False
      End Routine:
        buttons,times = mouse_block.getPressed(getTime=True)
        if buttons[-1] == correct_resp :
            accuracy = 1
        else:
            accuracy = 0
        accuracyTotal += accuracy
        runningAccuracy = (accuracyTotal / totalTrials_count) * 100

        #random.sample([1,0],1)[0]
        if accuracy_lastTrial == 0 and random.randrange(0,100,1) >= 50 and len(startled_trials1) < (totalTrials/100*50) :
            startled = True
            startled_trials1.append(totalTrials_count)
        elif accuracy_lastTrial == 0 and random.randrange(0,100,1) >= 50 and len(startled_trials0) < (totalTrials/100*50):
            startled = True
            startled_trials0.append(totalTrials_count)
        elif random.randrange(0,100,1) >= 50 and len(startled_trials4) < (totalTrials/100*4):
            startled = True
            startled_trials4.append(totalTrials_count)
        else :
            startled = False

        if startled == True :
            startle.play()
            #nextFlip = win.getFutureFlipTime(clock='ptb')
            #startle.play(when=nextFlip)  # sync with screen refresh

        thisExp.addData('trialType',trialType)
        thisExp.addData('accuracy',accuracy)
        thisExp.addData('rt',mouse_block.time[-1])
        thisExp.addData('trialN',trialNofcurrentLoop)
        thisExp.addData('totalTrials',totalTrials_count)
        thisExp.addData('accuracyTotal',accuracyTotal)
        thisExp.addData('runningAccuracy',runningAccuracy)
    CodeComponent code_LSL
      Code Type = Py
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      Before Experiment:
        try :
            import pylsl as LSL
        except :
            print(f"LSL not available.")
      Begin Experiment:
        if expInfo['EEG connected?'] == 'y' :
            stream = LSL.StreamInfo('psychopy2eego','Markers',1,0,'string',expInfo['Experiment ID'])
            outlet = LSL.StreamOutlet(stream)
            print(f"LSL active... \
                    \n{outlet}\
                    \n{stream}")
            outlet.push_sample([str(123)])  # start eego recording
      Begin Routine:
        if expInfo['EEG connected?'] == 'y' :
            LSL_msg = [str(event_marker)]
            outlet.push_sample(LSL_msg)
            print(f"{LSL_msg}")
      End Experiment:
        if expInfo['EEG connected?'] == 'y' :
            outlet.push_sample([str(127)])  # stop eego recording
      End Routine:
        if expInfo['EEG connected?'] == 'y' :
            outlet.push_sample([str(accuracy)])  # mark accuracy of trial
            print([str(accuracy)])
            if startled :
                outlet.push_sample([str("5::Startled!")])
    SoundComponent sound_startle
      disabled = True
      hamming = False
      sound = stimuli/startle2.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.05
      stopWithRoutine = False
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Flow
  Routine intro
  LoopInitiator practice_trials loopType="TrialHandler"
    conditionsFile = conditions.csv
    loopType = random
    nReps = 8
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    conditions:
      [OrderedDict([('stimulus', 'stimuli/All_left.jpg'), ('condition', 'compatible'), ('direction', 'left'), ('correct_resp', 0)]),
      OrderedDict([('stimulus', 'stimuli/All_Right.jpg'), ('condition', 'compatible'), ('direction', 'right'), ('correct_resp', 1)]),
      OrderedDict([('stimulus', 'stimuli/Center_Left.jpg'), ('condition', 'incompatible'), ('direction', 'left'), ('correct_resp', 0)]),
      OrderedDict([('stimulus', 'stimuli/Center_Right.jpg'), ('condition', 'incompatible'), ('direction', 'right'), ('correct_resp', 1)])]
    Routine fixation
    Routine trial_block
    Routine iTi
  LoopTerminator practice_trials
  Routine ready
  LoopInitiator blocks loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 3
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    LoopInitiator trials_block loopType="TrialHandler"
      conditionsFile = conditions.csv
      loopType = random
      nReps = 8*30
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      conditions:
        [OrderedDict([('stimulus', 'stimuli/All_left.jpg'), ('condition', 'compatible'), ('direction', 'left'), ('correct_resp', 0), ('event_marker', 'CL')]),
        OrderedDict([('stimulus', 'stimuli/All_Right.jpg'), ('condition', 'compatible'), ('direction', 'right'), ('correct_resp', 1), ('event_marker', 'CR')]),
        OrderedDict([('stimulus', 'stimuli/Center_Left.jpg'), ('condition', 'incompatible'), ('direction', 'left'), ('correct_resp', 0), ('event_marker', 'IL')]),
        OrderedDict([('stimulus', 'stimuli/Center_Right.jpg'), ('condition', 'incompatible'), ('direction', 'right'), ('correct_resp', 1), ('event_marker', 'IR')])]
      Routine fixation
      Routine trial_block
      Routine iTi
      LoopInitiator interBlock loopType="TrialHandler"
        isTrials = False
        loopType = sequential
        nReps = showBreakMessage
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        Routine performanceMessage
      LoopTerminator interBlock
    LoopTerminator trials_block
  LoopTerminator blocks
  Routine end
